PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'': u'', u'participant': u'99'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = stroop
  Screen = 1
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Routines
  Routine trial
    ImageComponent target
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $targetStim
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    SoundComponent distractor
      sound [set every repeat] = $distractorStim
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'g','j','escape'
      startVal [time (s)] = 0.0
      store = first key
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  Routine Ins
    TextComponent Instruction
      color = black
      text = Press Space to begin
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent ins_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine Ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_stroop.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'targetStim': u'images\\set1\\66.jpg', 'ITIdur': 0.5, 'trialType': u'con', 'blockType': u'easy', 'distractorStim': u'manmade.wav', 'bkId': 0, 'stimCat': u'man', 'corrAns': u'j'},
      {'targetStim': u'images\\set1\\73.jpg', 'ITIdur': 0.3, 'trialType': u'con', 'blockType': u'easy', 'distractorStim': u'manmade.wav', 'bkId': 0, 'stimCat': u'man', 'corrAns': u'j'},
      {'targetStim': u'images\\set1\\4.jpg', 'ITIdur': 0.5, 'trialType': u'con', 'blockType': u'easy', 'distractorStim': u'natural.wav', 'bkId': 0, 'stimCat': u'nat', 'corrAns': u'g'},
      {'targetStim': u'images\\set1\\23.jpg', 'ITIdur': 0.3, 'trialType': u'con', 'blockType': u'easy', 'distractorStim': u'natural.wav', 'bkId': 0, 'stimCat': u'nat', 'corrAns': u'g'},
      {'targetStim': u'images\\set1\\41.jpg', 'ITIdur': 0.5, 'trialType': u'con', 'blockType': u'easy', 'distractorStim': u'manmade.wav', 'bkId': 0, 'stimCat': u'man', 'corrAns': u'j'},
      {'targetStim': u'images\\set1\\53.jpg', 'ITIdur': 0.3, 'trialType': u'inc', 'blockType': u'easy', 'distractorStim': u'natural.wav', 'bkId': 0, 'stimCat': u'man', 'corrAns': u'j'},
      {'targetStim': u'images\\set1\\21.jpg', 'ITIdur': 0.5, 'trialType': u'inc', 'blockType': u'easy', 'distractorStim': u'manmade.wav', 'bkId': 0, 'stimCat': u'nat', 'corrAns': u'g'},
      {'targetStim': u'images\\set1\\35.jpg', 'ITIdur': 0.3, 'trialType': u'con', 'blockType': u'easy', 'distractorStim': u'natural.wav', 'bkId': 0, 'stimCat': u'nat', 'corrAns': u'g'}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
    Routine trial
  LoopTerminator trials
